PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = AP
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine gaborTrial
    CodeComponent code
      Begin Experiment:
        ISI = 1.5 + 1.5
        contrastList =np.linspace(.012,.11,9)
        noiseTexture = np.random.rand(512,512)*2.0-1
      Begin Routine:
        noiseTexture = np.random.rand(512,512)*2.0-1
        gC = np.random.choice(contrastList)
        gratingColor = [gC, gC, gC]

        if random()<trialPredictability:

            if thisTrialValue == "A":
                gratingOri = gratingOriB
                thisTrialValue = "B"
            elif thisTrialValue == "B":
                gratingOri = gratingOriA
                thisTrialValue = "A"

        ISI = random() + 1 + 1.5

        thisExp.addData('gratingOri', gratingOri)
        thisExp.addData('thisTrialValue', thisTrialValue)
        thisExp.addData('task',task)
    KeyboardComponent gabor_response
      stopVal [duration (s)] = $ISI
      durationEstim = 2.5
      forceEndRoutine = False
      allowedKeys = 'f','j','y','n','left','right','space'
      startVal [time (s)] = 0.0
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    GratingComponent grating
      tex = sin
      color [set every repeat] = $gratingColor
      stopVal [duration (s)] = 1.5
      mask = gauss
      texture resolution = 256
      ori [set every repeat] = $gratingOri
      startVal [time (s)] = 0
      sf = 1.6
      size = [3.8, 3.8]
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    ImageComponent image
      opacity = 0
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $noiseTexture
      size = [10, 10]
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  Routine Predictability_Instructions
    CodeComponent code_2
      Begin Experiment:
        predictText = "begin exp"
      Begin Routine:
        if trialPredictability==0.5:
            predictText = "For this block target is completely random"
        elif trialPredictability<0.5:
            predictText = "For this block target will usually stay the same"
        elif trialPredictability>0.5:
            predictText = "For this block target will usually alternate"
    TextComponent text_5
      wrapWidth = 20
      text [set every repeat] = $predictText
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    CodeComponent code_3
      Begin Experiment:
        taskText="notSet"
        showBlue = 1
        jText = "j=blue"
        baseOri = 0
        gratingOriA = baseOri-90
        gratingOriB = gratingOriA-60
        gratingOri  = gratingOriA
        thisTrialValue   = "A"


        if random() > .5:
            task = "AB"
        else:
            task = "A_notA"
      Begin Routine:
        if task == "AB":
            task = "A_notA"
        else:
            task = "AB"

        baseOri = random()*360
        gratingOriA = baseOri-90
        gratingOriB = gratingOriA-60

        if random()>.5:
            gratingOri  = gratingOriA
            thisTrialValue   = "A"
        else:
            gratingOri  = gratingOriB
            thisTrialValue   = "B"

        if task=="AB":
            taskText = "Press the ""f"" key if the pattern matches the red line\nPress the ""j"" key if the pattern matches the blue line"
            showBlue = 1
            jText = "j=blue"
        elif task=="A_notA":
            taskText = "Press the ""f"" key is the pattern matches the red line\n Otherwise press the ""j"" "
            showBlue = 0
            jText = ""
    PolygonComponent lineRed
      fillColor = $[1,-1,-1]
      lineWidth = 20
      lineColor = $[1,-1,-1]
      ori [set every repeat] = $baseOri
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [4]
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    PolygonComponent lineBlue
      opacity [set every repeat] = $showBlue
      fillColor = $[-1,-1,1]
      lineWidth = 20
      lineColor = $[-1,-1,1]
      ori [set every repeat] = $baseOri - 60
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [4]
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    TextComponent fRed
      text = f=red
      pos = [-2.1,1.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    TextComponent jBlue
      wrapWidth = 2
      text [set every repeat] = $jText
      pos = [2.1,1.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instructionText
      wrapWidth = 20
      text [set every repeat] = $taskText
      pos = [0, 3]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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Flow
  LoopInitiator predictabilityBlocks loopType="TrialHandler"
    conditionsFile = trialPredictabilityList.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{u'trialPredictability': 1},
      {u'trialPredictability': 0.5},
      {u'trialPredictability': 0}]
    LoopInitiator taskBlocks loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 10
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      Routine Instructions
      Routine Predictability_Instructions
      LoopInitiator targetRandomization loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine gaborTrial
      LoopTerminator targetRandomization
    LoopTerminator taskBlocks
  LoopTerminator predictabilityBlocks
