PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = imac
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = AP_practice_withFeedback
  Save excel file = True
  Units = deg
  Screen = 1
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Routines
  Routine feedback
    CodeComponent code_4
      Begin Experiment:
        feedback='none'
      Begin Routine:
        print gabor_response.keys


        if gabor_response.keys == correctResponse:
            feedback='Correct'
        elif gabor_response.keys==None:
            feedback='Too Slow'
        else:
            feedback='Wrong'
    TextComponent text_3
      text [set every repeat] = $feedback
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine gaborTrial
    CodeComponent code
      Begin Experiment:
        ISI = 1.5 + 1.5
        contrastList =np.linspace(.012,.11,9)
        noiseTexture = np.random.rand(512,512)*2.0-1
      Begin Routine:
        noiseTexture = np.random.rand(512,512)*2.0-1
        gC = np.random.choice(contrastList)
        gratingColor = [gC, gC, gC]

        #determine if this trial should switch
        if random()<trialPredictability:

            if thisTrialValue == "A":
                gratingOri = gratingOriB
                thisTrialValue = "B"
            elif thisTrialValue == "B":
                gratingOri = gratingOriA
                thisTrialValue = "A"

        ISI = random() + 1 + 1.5

        if thisTrialValue == "A":
            if swapResponse:
                correctResponse = "j"
            else:
                correctResponse = "f"
        elif thisTrialValue == "B":
            if swapResponse:
                correctResponse = "f"
            else:
                correctResponse = "j"

        thisExp.addData('gratingOri', gratingOri)
        thisExp.addData('gratingContrast', gC)
        thisExp.addData('thisTrialValue', thisTrialValue)
        thisExp.addData('task',task)
        thisExp.addData('swapResponse',swapResponse)
        thisExp.addData('correctResponse',correctResponse)
    KeyboardComponent gabor_response
      stopVal [duration (s)] = $ISI
      durationEstim = 2.5
      forceEndRoutine = False
      allowedKeys = 'f','j','y','n','left','right','space'
      startVal [time (s)] = 0.0
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    GratingComponent grating
      tex = sin
      color [set every repeat] = $gratingColor
      stopVal [duration (s)] = 1.5
      mask = gauss
      texture resolution = 256
      ori [set every repeat] = $gratingOri
      startVal [time (s)] = 0
      sf = 1.6
      size = [3.8, 3.8]
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    ImageComponent image
      opacity = .15
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $noiseTexture
      size = [10, 10]
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  Routine Predictability_Instructions
    CodeComponent code_2
      Begin Experiment:
        predictText = "begin exp"
      Begin Routine:
        if trialPredictability==0.5:
            predictText = "For this block target is completely random"
        elif trialPredictability<0.5:
            predictText = "For this block target will usually stay the same"
        elif trialPredictability>0.5:
            predictText = "For this block target will usually alternate"
    TextComponent text_5
      wrapWidth = 20
      text [set every repeat] = $predictText
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      text = Press Space to continue
      pos = [0, -6]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine Instructions
    CodeComponent code_3
      Begin Experiment:
        taskText="notSet"
        showBlue = 1
        showGreen = 1-showBlue
        jText = "j=blue"
        aText = "f"
        bText = "j"
        blueText = "j=blue"

        baseOri = 0
        gratingOriA = baseOri-90
        gratingOriB = gratingOriA-60
        gratingOri  = gratingOriA
        thisTrialValue   = "A"
        redPos  = [2,0]
        bluePos = [0,2]

        if random() > .5:
            task = "AB"
        else:
            task = "A_notA"
      Begin Routine:
        if task == "AB":
            task = "A_notA"
        else:
            task = "AB"

        baseOri = random()*360
        gratingOriA = baseOri-90
        gratingOriB = gratingOriA-60


        redPos = [ 3*sin(deg2rad(gratingOriA)), 3*cos(deg2rad(gratingOriA))]
        bluePos = [ 3*sin(deg2rad(gratingOriB)), 3*cos(deg2rad(gratingOriB))]

        #print(redPos)
        #print(gratingOriA)
        #print(sin(deg2rad(gratingOriA)))

        if random()>.5:
            gratingOri  = gratingOriA
            thisTrialValue   = "A"
        else:
            gratingOri  = gratingOriB
            thisTrialValue   = "B"

        if random()>.5:
            swapResponse = False
        else:
            swapResponse = True
        #swapResponse = True
        #print(swapResponse)

        if task=="AB":
            if swapResponse:
                taskText = "Press the ""j"" key if the pattern matches the red line\nPress the ""f"" key if the pattern matches the blue line"
                showBlue = 1
                jText = "j=blue"
                aText = "j"
                bText = "f"
                print("swapResponse")
            else:
                taskText = "Press the ""f"" key if the pattern matches the red line\nPress the ""j"" key if the pattern matches the blue line"
                showBlue = 1
                jText = "j=blue"
                aText = "f"
                bText = "j"


        elif task=="A_notA":
            if swapResponse:
                taskText = "Press the ""j"" key if the pattern matches the green line\nOtherwise press the ""f"" "
                showBlue = 0
                jText = ""
                aText = "j"
                bText = ""
                print("swapResponse")
            else:
                taskText = "Press the ""f"" key if the pattern matches the green line\nOtherwise press the ""j"" "
                showBlue = 0
                jText = ""
                aText = "f"
                bText = ""


        showGreen = 1-showBlue
        print(taskText)
    PolygonComponent polygon
      fillColor = $[-.5,-.5,-.5]
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [4,4]
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    PolygonComponent lineGreen
      opacity [set every repeat] = $showGreen
      fillColor = $[-1,1,-1]
      lineWidth = 20
      lineColor = $[-1,1,-1]
      ori [set every repeat] = $baseOri
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [4]
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    PolygonComponent lineRed
      opacity [set every repeat] = $showBlue
      fillColor = $[1,-1,-1]
      lineWidth = 20
      lineColor = $[1,-1,-1]
      ori [set every repeat] = $baseOri
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [4]
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    PolygonComponent lineBlue
      opacity [set every repeat] = $showBlue
      fillColor = $[-1,-1,1]
      lineWidth = 20
      lineColor = $[-1,-1,1]
      ori [set every repeat] = $baseOri - 60
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [4]
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    TextComponent ALabel
      text [set every repeat] = $aText
      pos [set every repeat] = $redPos
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    TextComponent BLabel
      wrapWidth = 2
      text [set every repeat] = $bText
      pos [set every repeat] = $bluePos
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instructionText
      wrapWidth = 20
      text [set every repeat] = $taskText
      pos = [0, 6]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    TextComponent text
      text = Press Space to Continue
      pos = [0, -6]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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Flow
  LoopInitiator predictabilityBlocks loopType="TrialHandler"
    conditionsFile = trialPredictabilityList.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'trialPredictability': 0.9},
      {u'trialPredictability': 0.5},
      {u'trialPredictability': 0.1}]
    LoopInitiator taskBlocks loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1
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      Routine Instructions
      Routine Predictability_Instructions
      LoopInitiator targetRandomization loopType="TrialHandler"
        loopType = random
        nReps = 10
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        Routine gaborTrial
        Routine feedback
      LoopTerminator targetRandomization
    LoopTerminator taskBlocks
  LoopTerminator predictabilityBlocks
